PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1280, 1024]
  Full-screen window = True
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date']) 
  expName = ModTask
  Screen = 1
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Routines
  Routine Intertrial
    StaticComponent ISI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
  Routine practicefeedback
    CodeComponent code
      Begin Experiment:
        msg=''
      Begin Routine:
        if PracticeKey.corr:#stored on last run routine
          msg="Correct"
        else:
          msg="Incorrect"
    TextComponent PracticeFeedbackText
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Step_2
    TextComponent Step2Text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Step 3: 12/ 4 -> 3

        Step 4: 3 is a whole number, so would respond true
    KeyboardComponent Step2_key
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine PracticeOver
    TextComponent PracticeOverText
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        You have completed the practice session. Now you will solve MA problems with a similar format except without accuracy feedback. Remember to rest your index fingers on the z and m keys.

        Hit any key to continue
    KeyboardComponent PracticeOverKey
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine Intertrial2
    StaticComponent ISI_2
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
  Routine MaInstr2
    TextComponent InstrText2
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Here's another example
        Is the following statement true?:
        36≡19 (mod 2)

        First we subtract 19 from 36:
        36 – 19 = 17
        Does 2 divide 17 with 0 as the remainder?

        Second we divide the resultant by the mod number:
        17/2 = 8.5
        No, 2 goes into 17 8.5 times, with a remainder of Five.

        Thus our statement is False.

        Hit any key to continue
    KeyboardComponent InstrKey2
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine SessionNum
    TextComponent TaskOrderText
      text = Enter Session number
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent session_number_key
      correctAns = 1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MaInstr
    TextComponent InstrText
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        In this task your job is to judge whether the problems are "true" or "false" as quickly and accurately as possible.You are going to see problems on the screen that look like the following: 44≡18 (mod 2)

        To solve such equations, you subtract the second number from the first (i.e., 44 – 18), and then the difference is divided by the last number,(i.e., 26 /2).

        If the resultant is a whole number (here, 13), the statement is True.Problems with remainders are considered False (i.e., 13.5).

         Hit any key to continue
    KeyboardComponent InstrKey
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine TestTrial
    TextComponent TestCross
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent TestText
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text [set every repeat]:
        $MA_test
    KeyboardComponent TestKey
      correctAns = $corrAns2
      storeCorrect = True
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'z','m'
      startVal [time (s)] = 0.5
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  Routine MaInstr3
    TextComponent InstrText3
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        You will now do a set of practice problems that have accuracy feedback after each problem.
        Judge the truth validity of each problem as quickly as possible without sacrificing accuracy, indicate your response using the z (true) or m (false) keys. Remember to rest your left and right index fingers on the z and m keys, respectively, throughout the experiment.

        Hit any key to start
    KeyboardComponent InstrKey3
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine Thanks
    TextComponent ThanksText
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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      text:
        This is the end of the experiment.

        Thanks!
  Routine PracticeTrial
    TextComponent PracticeCross
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent PracticeText
      text [set every repeat] = $MA_practice
      stopVal [duration (s)] = 1
      pos = [0.0, 0.0]
      startVal [time (s)] = 0.5
      letterHeight = 0.10
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    KeyboardComponent PracticeKey
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'z','m'
      startVal [time (s)] = 0.5
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Flow
  Routine MaInstr
  Routine MaInstr2
  Routine MaInstr3
  LoopInitiator PracticeBlock loopType="TrialHandler"
    conditionsFile = Mod practice problems.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'MA_practice': u'3\u22611 (mod 2)', 'corrAns': u'z', 'Identity': u'low'},
      {'MA_practice': u'3\u22611 (mod 3)', 'corrAns': u'm', 'Identity': u'low'},
      {'MA_practice': u'5\u22612 (mod 3)', 'corrAns': u'z', 'Identity': u'low'},
      {'MA_practice': u'5\u22612 (mod 2)', 'corrAns': u'm', 'Identity': u'low'},
      {'MA_practice': u'62\u226113 (mod 7)', 'corrAns': u'z', 'Identity': u'high'},
      {'MA_practice': u'62\u226113 (mod 8)', 'corrAns': u'm', 'Identity': u'high'},
      {'MA_practice': u'83\u226135 (mod 4)', 'corrAns': u'z', 'Identity': u'high'},
      {'MA_practice': u'83\u226135 (mod 5)', 'corrAns': u'm', 'Identity': u'high'}]
    Routine PracticeTrial
    Routine practicefeedback
    Routine Intertrial
  LoopTerminator PracticeBlock
  Routine PracticeOver
  LoopInitiator TestBlock loopType="TrialHandler"
    conditionsFile = Mod task problem bank.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'corrAns2': u'z', 'MA_test': u'3\u22612 (mod 1)', 'Identity': u'easy'},
      {'corrAns2': u'm', 'MA_test': u'3\u22612 (mod 2)', 'Identity': u'easy'},
      {'corrAns2': u'z', 'MA_test': u'4\u22611 (mod 3)', 'Identity': u'easy'},
      {'corrAns2': u'm', 'MA_test': u'4\u22611 (mod 2)', 'Identity': u'easy'},
      {'corrAns2': u'z', 'MA_test': u'5\u22611 (mod 4)', 'Identity': u'easy'},
      {'corrAns2': u'm', 'MA_test': u'5\u22611 (mod 3)', 'Identity': u'easy'},
      {'corrAns2': u'z', 'MA_test': u'6\u22611 (mod 5)', 'Identity': u'easy'},
      {'corrAns2': u'm', 'MA_test': u'6\u22611 (mod 3)', 'Identity': u'easy'},
      {'corrAns2': u'z', 'MA_test': u'6\u22612 (mod 4)', 'Identity': u'easy'},
      {'corrAns2': u'm', 'MA_test': u'6\u22612 (mod 3)', 'Identity': u'easy'},
      {'corrAns2': u'z', 'MA_test': u'6\u22613 (mod 3)', 'Identity': u'easy'},
      {'corrAns2': u'm', 'MA_test': u'6\u22613 (mod 2)', 'Identity': u'easy'},
      {'corrAns2': u'z', 'MA_test': u'7\u22612 (mod 5)', 'Identity': u'easy'},
      {'corrAns2': u'm', 'MA_test': u'7\u22612 (mod 4)', 'Identity': u'easy'},
      {'corrAns2': u'z', 'MA_test': u'7\u22613 (mod 4)', 'Identity': u'easy'},
      {'corrAns2': u'm', 'MA_test': u'7\u22613 (mod 3)', 'Identity': u'easy'},
      {'corrAns2': u'z', 'MA_test': u'7\u22614 (mod 3)', 'Identity': u'easy'},
      {'corrAns2': u'm', 'MA_test': u'7\u22614 (mod 4)', 'Identity': u'easy'},
      {'corrAns2': u'z', 'MA_test': u'7\u22615 (mod 2)', 'Identity': u'easy'},
      {'corrAns2': u'm', 'MA_test': u'7\u22615 (mod 3)', 'Identity': u'easy'},
      {'corrAns2': u'z', 'MA_test': u'8\u22611 (mod 7)', 'Identity': u'easy'}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
    Routine TestTrial
    Routine Intertrial2
  LoopTerminator TestBlock
  Routine Thanks
