PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data' + os.path.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1536, 864]
  Full-screen window = True
  Experiment info = {u'session': u'', u'participant': u''}
  expName = MA task
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine Intertrial
    StaticComponent ISI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
  Routine Step_1
    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Step 1: 34=22 (mod 4)

        Step 2: 34-22 -> 12
    KeyboardComponent Step1_key
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine practicefeedback
    CodeComponent code
      Begin Experiment:
        msg=''
      Begin Routine:
        if trial_key.corr:#stored on last run routine
          msg="Correct"
        else:
          msg="Incorrect"
    TextComponent text
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Step_2
    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Step 3: 12/ 4 -> 3

        Step 4: 3 is a whole number, so would respond true
    KeyboardComponent Step2_key
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine Intertrial3
    StaticComponent ISI_3
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
  Routine Intertrial2
    StaticComponent ISI_2
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
  Routine Manipulation
    CodeComponent code_2
      Begin Experiment:
        msg=''
      Begin Routine:
        if session_number_key.corr:
            msg="We are interested in modular mathematics for a reason.As you probably know, math skills are crucial to performance in many important subjects in college. Yet surprisingly little is known about the mental processes underlying math ability. This research is aimed at better understanding what makes some people better at math than others. Your performance on the math problems you are doing today will be compared to other students from across the nation. Hit any button to continue."
        else:
            msg="As you may know, at most schools male students outnumber female students in math majors and majors with math as a prerequisite, and there seems to be a growing gap in academic performance between these groups. A good deal of research indicates that males consistently score higher than females on standardized tests of math ability. But thus far, there is not a good explanation for this. The research you are participating in is aimed at better understanding these differences. Your performance on the math problems you are doing today will be compared to other students from across the nation. One specific question is whether males are superior at all types of math problems or only certain types."
    TextComponent text_2
      text [set every repeat] = $msg
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    KeyboardComponent Mani_key
      forceEndRoutine = True
      startVal [time (s)] = 4
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  Routine SessionNum
    TextComponent text_14
      text = Enter Session number
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent session_number_key
      correctAns = 1
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '0','1'
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent trial_text
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent MA
      text [set every repeat] = $MA_practice
      stopVal [duration (s)] = 1
      pos = [0.0, 0.0]
      startVal [time (s)] = 0.5
      letterHeight = 0.10
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    KeyboardComponent trial_key
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'z','m'
      startVal [time (s)] = 0.5
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  Routine thanks
    TextComponent thanksText
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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      text:
        This is the end of the experiment.

        Thanks!
  Routine Ma_Task_Desc
    TextComponent text_13
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        This modular arithmetic (MA) task involves judging the truth value of equations such as 34=22 (mod 4). To solve such equations, the second number is subtracted from the first number(i.e., 34 – 22), and this difference is then divided by the last number, the mod, (i.e., 12 /4).
        If the resultant is a whole number (here, 3), the statement is True. Problems with remainders are considered False (i.e., 3.5). Hit any key to continue
    KeyboardComponent MA_task_desc_key
      forceEndRoutine = True
      startVal [time (s)] = 5
      store = nothing
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  Routine exptrial
    TextComponent text_8
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_9
      text [set every repeat] = $MA_exp
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = .5
      letterHeight = 0.1
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    KeyboardComponent exptrial_key
      correctAns = $corrAns3
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'z','m'
      startVal [time (s)] = 0.5
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  Routine MA_task_instr
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        You will now do 12 practice problems that have accuracy feedback after each problem.
        Judge the Truth validity of each problem as quickly as possible without sacrificing accuracy, indicate your response using the z (true) or m (false) keys. Remember to rest your left and right index fingers on the z and m keys, respectively, throughout the experiment.
    KeyboardComponent MA_task_instr_key
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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  Routine practice_over
    TextComponent text_12
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        You have completed the practice session. Now you will solve two sets of 24 MA problems with a similar format except without accuracy feedback. Remember to rest your index fingers on the z and m keys.

        Hit any key to continue
    KeyboardComponent practice_over_key
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine basetrial
    TextComponent text_7
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent base_lineprobs
      text [set every repeat] = $MA_baseline
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent basetrial_key
      correctAns = $corrAns2
      storeCorrect = True
      forceEndRoutine = True
      discard previous = False
      allowedKeys = 'z','m'
      startVal [time (s)] = 0.5
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Flow
  Routine SessionNum
  Routine Ma_Task_Desc
  Routine Step_1
  Routine Step_2
  Routine MA_task_instr
  LoopInitiator Practice_trials loopType="TrialHandler"
    conditionsFile = MA practice problems.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{u'MA_practice': u'7=2 (mod 5)', u'corrAns': u't'},
      {u'MA_practice': u'8=5 (mod 4)', u'corrAns': u'f'},
      {u'MA_practice': u'9=3 (mod 6)', u'corrAns': u't'},
      {u'MA_practice': u'6=1 (mod 3)', u'corrAns': u'f'},
      {u'MA_practice': u'51=19 (mod 4)', u'corrAns': u't'},
      {u'MA_practice': u'45=27 (mod 4)', u'corrAns': u'f'},
      {u'MA_practice': u'98=44 (mod 3)', u'corrAns': u't'},
      {u'MA_practice': u'44=16 (mod 3)', u'corrAns': u'f'},
      {u'MA_practice': u'19=12 (mod 7)', u'corrAns': u't'},
      {u'MA_practice': u'39=35 (mod 8) ', u'corrAns': u'f'},
      {u'MA_practice': u'56=52 (mod 4)', u'corrAns': u't'},
      {u'MA_practice': u'27=22 (mod 3)', u'corrAns': u'f'}]
    Routine trial
    Routine practicefeedback
    Routine Intertrial
  LoopTerminator Practice_trials
  Routine practice_over
  LoopInitiator Baseline_block loopType="TrialHandler"
    conditionsFile = Ma task problem bank.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{u'corrAns2': u't', u'MA_baseline': u'6=3 (mod 3)', u'MA_exp': u'5=2 (mod 3)', u'corrAns3': u't'},
      {u'corrAns2': u'f', u'MA_baseline': u'8=4 (mod 5)', u'MA_exp': u'8=3 (mod 5)', u'corrAns3': u'f'},
      {u'corrAns2': u't', u'MA_baseline': u'9=2 (mod 7)', u'MA_exp': u'8=4 (mod 4)', u'corrAns3': u't'},
      {u'corrAns2': u'f', u'MA_baseline': u'6=3 (mod 2)', u'MA_exp': u'9=7 (mod 4)', u'corrAns3': u'f'},
      {u'corrAns2': u't', u'MA_baseline': u'4=1 (mod 3)', u'MA_exp': u'8=6 (mod 2)', u'corrAns3': u't'},
      {u'corrAns2': u'f', u'MA_baseline': u'7=4 (mod 4)', u'MA_exp': u'7=1 (mod 4)', u'corrAns3': u'f'},
      {u'corrAns2': u't', u'MA_baseline': u'5=2 (mod 3)', u'MA_exp': u'6=4 (mod 2)', u'corrAns3': u't'},
      {u'corrAns2': u'f', u'MA_baseline': u'6=4 (mod 3) ', u'MA_exp': u'8=2 (mod 3) ', u'corrAns3': u'f'},
      {u'corrAns2': u't', u'MA_baseline': u'67=33 (mod 2)', u'MA_exp': u'62=32 (mod 3)', u'corrAns3': u't'},
      {u'corrAns2': u'f', u'MA_baseline': u'50=21 (mod 6)', u'MA_exp': u'50=29 (mod 5)', u'corrAns3': u'f'},
      {u'corrAns2': u't', u'MA_baseline': u'42=22 (mod 5)', u'MA_exp': u'49=24 (mod 5)', u'corrAns3': u't'},
      {u'corrAns2': u'f', u'MA_baseline': u'77=42 (mod 4)', u'MA_exp': u'74=49 (mod 4)', u'corrAns3': u'f'},
      {u'corrAns2': u't', u'MA_baseline': u'95=58 (mod 3)', u'MA_exp': u'95=58 (mod 3)', u'corrAns3': u't'},
      {u'corrAns2': u'f', u'MA_baseline': u'85=74(mod 5)', u'MA_exp': u'85=74 (mod 5)', u'corrAns3': u'f'},
      {u'corrAns2': u't', u'MA_baseline': u'65=33 (mod 8)', u'MA_exp': u'67=37 (mod 5)', u'corrAns3': u't'}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
    Routine basetrial
    Routine Intertrial2
  LoopTerminator Baseline_block
  Routine Manipulation
  LoopInitiator experimental_block loopType="TrialHandler"
    conditionsFile = Ma task problem bank.xlsx
    isTrials = False
    loopType = fullRandom
    nReps = 1
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    conditions:
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    Routine exptrial
    Routine Intertrial3
  LoopTerminator experimental_block
  Routine thanks
